CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "B31")
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "B31")
    Name to assign these images:Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Orig
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:10
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Cells
    Name the output image:CellImask_original
    Select the color format:Binary (black & white)
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
MeasureImageAreaOccupied:[module_num:9|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:CellImask_original
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
MeasureObjectSizeShape:[module_num:10|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select object sets to measure:Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:11|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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
    Select images to measure:CellImask_original
    Select objects to measure:Cells

MeasureTexture:[module_num:12|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notes:['Measure texture features of the nuclei, cells and cytoplasm from the cropped DAPI image.']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
    Select images to measure:CellImask_original
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Orig
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cells

GrayToColor:[module_num:14|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notes:['Combine the cropped grayscale channels into a color RGB image.']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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:CropRed
    Select the image to be colored green:CropGreen
    Select the image to be colored blue:CropBlue
    Name the output image:RGBImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
RelateObjects:[module_num:15|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enabled:False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
    Parent objects:Nuclei
    Child objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:16|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Cells

SaveImages:[module_num:17|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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
    Select the type of image to save:Image
    Select the image to save:CellImask_original
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:B3_1
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents\\שנה ד\\שנתי\\פרוייקט גמר\\Output pictures
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

TrackObjects:[module_num:18|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
    Choose a tracking method:Overlap
    Select the objects to track:Cells
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:TrackedCells
    Saved file format:tiff
    Output file location:Elsewhere...|Documents\\שנה ד\\שנתי\\פרוייקט גמר\\Output Tracking
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:20|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notes:["Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv's."]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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Documents\\שנה ד\\שנתי\\פרוייקט גמר\\טבלאות נתונים
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Texture_SumVariance_CellImask_original_3_02_256,Image|Texture_SumVariance_CellImask_original_3_01_256,Image|Texture_SumVariance_CellImask_original_3_00_256,Image|Texture_SumVariance_CellImask_original_3_03_256,Image|Texture_SumEntropy_CellImask_original_3_03_256,Image|Texture_SumEntropy_CellImask_original_3_01_256,Image|Texture_SumEntropy_CellImask_original_3_02_256,Image|Texture_SumEntropy_CellImask_original_3_00_256,Image|Texture_InfoMeas2_CellImask_original_3_01_256,Image|Texture_InfoMeas2_CellImask_original_3_02_256,Image|Texture_InfoMeas2_CellImask_original_3_00_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:CELLS.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
